PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = UCI SBSODS
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Routines
  Routine trial
    TextComponent Instructions
      letterHeight = 0.045
      pos = (0, 0) 
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        Santa Barbara Sense-of-Direction Scale

        The following statements ask you about your spatial and navigational abilities,
        preferences, and experiences. After each statement, select a number to indicate
        your level of agreement with the statement. To select a number, press the
        corresponding number on your keyboard.

        Press any key to continue.
    KeyboardComponent instructions
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SBSODS_Trial_1
    TextComponent Q2_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        I am very good at giving directions.

        Strongly agree   1   2   3   4   5   6   7   Strongly disagree
    KeyboardComponent Q2_2
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_2
    TextComponent Q3_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        I have a poor memory for where I left things.

        Strongly agree   1   2   3   4   5   6   7   Strongly disagree
    KeyboardComponent Q3_2
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_3
    TextComponent Q4_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        I am very good at judging distances.

        Strongly agree   1   2   3   4   5   6   7   Strongly disagree
    KeyboardComponent Q4_2
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_4
    TextComponent Q5_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        My “sense of direction” is very good.

        Strongly agree   1   2   3   4   5   6   7   Strongly disagree
    KeyboardComponent Q5_2
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_5
    TextComponent text_5
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        I tend to think of my environment in terms of cardinal directions (N, S, E, W).

        Strongly agree   1   2   3   4   5   6   7   Strongly disagree
    KeyboardComponent key_resp_5
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_6
    TextComponent Q6_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        I very easily get lost in a new city.

        Strongly agree   1   2   3   4   5   6   7   Strongly disagree
    KeyboardComponent Q6_2
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_7
    TextComponent Q7_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        I enjoy reading maps.

        Strongly agree   1   2   3   4   5   6   7   Strongly disagree
    KeyboardComponent Q7_2
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_8
    TextComponent Q8_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        I have trouble understanding directions

        Strongly agree   1   2   3   4   5   6   7   Strongly disagree
    KeyboardComponent Q8_2
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_9
    TextComponent Q9_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        I am very good at reading maps.

        Strongly agree   1   2   3   4   5   6   7   Strongly disagree
    KeyboardComponent Q9_2
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_10
    TextComponent Q10_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        I don’t remember routes very well while riding as a passenger in a car.

        Strongly agree   1   2   3   4   5   6   7   Strongly disagree
    KeyboardComponent Q10_2
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_11
    TextComponent Q11_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        I don’t enjoy giving directions.

        Strongly agree   1   2   3   4   5   6   7   Strongly disagree
    KeyboardComponent Q11_2
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_12
    TextComponent Q12_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        It’s not important to me to know where I am.

        Strongly agree   1   2   3   4   5   6   7   Strongly disagree
    KeyboardComponent Q12_2
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_13
    TextComponent Q13_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        I usually let someone else do the navigational planning for long trips.

        Strongly agree   1   2   3   4   5   6   7   Strongly disagree
    KeyboardComponent Q13_2
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_14
    TextComponent Q14_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        I can usually remember a new route after I have traveled it only once.

        Strongly agree   1   2   3   4   5   6   7   Strongly disagree
    KeyboardComponent Q14_2
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine SBSODS_Trial_15
    TextComponent Q15_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        I don’t have a very good “mental map” of my environment.

        Strongly agree   1   2   3   4   5   6   7   Strongly disagree
    KeyboardComponent Q15_2
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Thank_you
    TextComponent Thankyou
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you!

        Press any key to exit.
    KeyboardComponent Exit
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_2
    TextComponent Q1_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        Santa Barbara Sense-of-Direction Scale

        Select “1” if you strongly agree that the statement applies to you, “7”
        if you strongly disagree, or some number in between if your agreement
        is intermediate. Select “4” if you neither agree nor disagree.

        Press any key to continue.
    KeyboardComponent Q1_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine trial
  Routine trial_2
  Routine SBSODS_Trial_1
  Routine SBSODS_Trial_2
  Routine SBSODS_Trial_3
  Routine SBSODS_Trial_4
  Routine SBSODS_Trial_5
  Routine SBSODS_Trial_6
  Routine SBSODS_Trial_7
  Routine SBSODS_Trial_8
  Routine SBSODS_Trial_9
  Routine SBSODS_Trial_10
  Routine SBSODS_Trial_11
  Routine SBSODS_Trial_12
  Routine SBSODS_Trial_13
  Routine SBSODS_Trial_14
  Routine SBSODS_Trial_15
  Routine Thank_you
